OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.2.0)

Acquisition client "Emotiv Epoc X" => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "F3" => #1
  Channel List = F3
  Action = Select
  Channel Matching Method = Name
-> Temporal filter "Alpha" => #2
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
  Band Pass Ripple (dB) = 0.5
#1 -> Temporal filter "Beta" => #3
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 12
  High Cut-off Frequency (Hz) = 30
  Band Pass Ripple (dB) = 0.5
#0.Signal stream -> Channel Selector "F4" => #4
  Channel List = F4
  Action = Select
  Channel Matching Method = Smart
-> Temporal filter "Alpha" => #5
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 12
  Band Pass Ripple (dB) = 0.5
#4 -> Temporal filter "Beta" => #6
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 12
  High Cut-off Frequency (Hz) = 30
  Band Pass Ripple (dB) = 0.5
alphaF3=#2, betaF3=#3, alphaF4=#5, betaF4=#6 -> Simple DSP "Arousal" => #7
  Equation = (B+D)/(A+C)
alphaF3=#2, betaF3=#3, alphaF4=#5, betaF4=#6 -> Simple DSP "Valence" => #8
  Equation = (C/D)-(A/B)
Input 1=#7, Input 2=#8 -> Signal Merger
-> Time based epoching
  Epoch duration (in sec) = 30
  Epoch intervals (in sec) = 10
-> Signal average => #11
Input signal=#11 -> LSL Export
  Signal stream = Arousal-Valence
  Marker stream =
#11 -> Matrix Display
  Color gradient = 0:2,36,58; 50:100,100,100; 100:83,17,20
  Steps = 100
  Symetric min/max = false
  Real time min/max = false
